opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: HUCA_Pool_dispensacion
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Samples Tube Rack 6: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 2}
  Samples Tube Rack 1: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 7}
  Samples Tube Rack 2: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 4}
  Samples Tube Rack 3: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 1}
  Samples Tube Rack 4: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 8}
  Samples Tube Rack 5: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 5}
  NEST 96 Deepwell Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 6}
  Lysis Tube Rack: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, slot: 9}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, slot: 11}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
  96 Well Aluminum Block with PCR PLATE 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: 3}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
ingredients:
  - Sample
  - Lysis: {serialize: true}
ingredLocations:
  Samples Tube Rack 6:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5
  Samples Tube Rack 1:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5
  Samples Tube Rack 2:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5
  Samples Tube Rack 3:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5
  Samples Tube Rack 4:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5
  Samples Tube Rack 5:
    Sample {volume: 3000}: A1-C1, A2-C2, A3-C3, A4-C4
    Sample {volume: 500}: A5-C5
  Lysis Tube Rack:
    Lysis {volume: 20000}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 280
  path: single
  changeTip: always
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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