opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: C-Placa
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 7}
  96 Well Aluminum Block with PCR Plate 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: 4}
  96 Well Plate 100 µL (PITUFOS): {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 1}
  Roche magnapure 96 Well Plate 400 µL: {definitionId: custom_beta/rochemagnapure_96_wellplate_400ul/1, slot: 5}
  96 Well Plate 100 µL (PITUFOS) 2: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - SAMPLE
ingredLocations:
  Roche magnapure 96 Well Plate 400 µL:
    SAMPLE {volume: 100}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Roche magnapure 96 Well Plate 400 µL
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well Aluminum Block with PCR Plate 200 µL
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 95
  path: single
  changeTip: always
  aspirate_labware: Roche magnapure 96 Well Plate 400 µL
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well Plate 100 µL (PITUFOS)
  dispense_wells: A1, A3, A5, A7, A9, A11
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 95
  path: single
  changeTip: always
  aspirate_labware: Roche magnapure 96 Well Plate 400 µL
  aspirate_wells: A7-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 Well Plate 100 µL (PITUFOS) 2
  dispense_wells: A1, A3, A5, A7, A9, A11
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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  custom_beta/rochemagnapure_96_wellplate_400ul/1:
    brand: {brand: roche_magnapure, brandId: [magnapure/06 241 611 001]}
    metadata: {displayName: Roche_magnapure 96 Well Plate 400 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 18}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: rochemagnapure_96_wellplate_400ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 14.5, totalLiquidVolume: 400, shape: circular, diameter: 7, x: 14.38, y: 74.25, z: 3.5}
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commands:
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 5, labware: Roche magnapure 96 Well Plate 400 µL, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 5, labware: 96 Well Aluminum Block with PCR Plate 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- dropTip: {pipette: p20_multi_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A2}
- aspirate: {pipette: p20_multi_gen2, volume: 5, labware: Roche magnapure 96 Well Plate 400 µL, well: A2, offsetFromBottomMm: 1, flowRate: 7.6}
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